#pragma once
#include "HSLJson\\HSLJson.hsl"
#include "HSLErrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "templates\\HSLPipetteWizard.hsl"
#include "HSLSchedCCLib.hs_"

namespace PY_HAMILTON_STEP_ML_STAR {
  private function CastArrayToFloat( variable & arr_array[] ) void ;
  private function CastArrayToInt( variable & arr_array[] ) void ;
  private function Channel1000ulAspirate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function Channel1000ulCoreGripGetPlate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function Channel1000ulCoreGripPlacePlate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function Channel1000ulDispense( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function Channel1000ulTipEject( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function Channel1000ulTipPickup( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  function CheckCommandExists( variable str_command_name ) variable ;
  function ExecuteCommand( device & ML_STAR, variable str_command_name, object & json_args_packet, object & json_response_packet ) variable ;
  private function GetCommandNames( variable & arr_command_names[] ) void ;
  private function LockUnlockFrontCover( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void ;
  private function PadArray( variable & arr_array[], variable int_new_length, variable var_pad_value ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function GetCommandNames( variable & arr_command_names[] ) void {
    arr_command_names.SetSize( 0);
    arr_command_names.SetSize(0);
    arr_command_names.AddAsLast("Channel1000ulTipPickupCommand");
    arr_command_names.AddAsLast("Channel1000ulAspirateCommand");
    arr_command_names.AddAsLast("Channel1000ulDispenseCommand");
    arr_command_names.AddAsLast("Channel1000ulTipEjectCommand");
    arr_command_names.AddAsLast("LockUnlockFrontCoverCommand");
    arr_command_names.AddAsLast("Channel1000ulCoreGripGetPlateCommand");
    arr_command_names.AddAsLast("Channel1000ulCoreGripPlacePlateCommand");
  }

  function CheckCommandExists( variable str_command_name ) variable {
    private variable int_command_names_size;
    private variable index;
    private variable arr_command_names[];
    GetCommandNames(arr_command_names);
    int_command_names_size=arr_command_names.GetSize();
    {
      for(index = 0; index < int_command_names_size;)
      {
        index = index + 1;
        if (str_command_name == arr_command_names.ElementAt( index -1))
        {
          return (1);
        }
      }
    }
    return (0);
  }

  private function Channel1000ulTipPickup( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable int_success_flag;
    private variable arr_sequence_position[];
    private variable arr_sequence_labware[];
    private variable str_channel_variable;
    private variable int_arr_size;
    private variable str_venus_handle_errors;
    private variable index;
    private sequence seq_sequence;
    private variable str_channel_sequences_with_recovery_details;
    private variable err_code_3;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("channel_variable"), str_channel_variable);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("channel_variable not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_labware"), arr_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_position"), arr_sequence_position);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_position not found in json_args_packet"));
    }
    int_arr_size=arr_sequence_labware.GetSize();
    {
      for(index = 0; index < int_arr_size;)
      {
        index = index + 1;
        SeqAdd(seq_sequence, arr_sequence_labware.ElementAt( index -1), arr_sequence_position.ElementAt( index -1));
      }
    }
    seq_sequence.SetCount(int_arr_size);
    seq_sequence.SetCurrentPosition(1);
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
    }
    else
    {
      onerror goto errLabel_1 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_channel_sequences_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  function ExecuteCommand( device & ML_STAR, variable str_command_name, object & json_args_packet, object & json_response_packet ) variable {
    private variable int_return_val;
    int_return_val = 0;
    if (str_command_name == "Channel1000ulTipPickupCommand")
    {
      int_return_val = 1;
      Channel1000ulTipPickup(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "Channel1000ulAspirateCommand")
    {
      int_return_val = 1;
      Channel1000ulAspirate(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "Channel1000ulDispenseCommand")
    {
      int_return_val = 1;
      Channel1000ulDispense(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "Channel1000ulTipEjectCommand")
    {
      int_return_val = 1;
      Channel1000ulTipEject(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "LockUnlockFrontCoverCommand")
    {
      int_return_val = 1;
      LockUnlockFrontCover(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "Channel1000ulCoreGripGetPlateCommand")
    {
      int_return_val = 1;
      Channel1000ulCoreGripGetPlate(ML_STAR, json_args_packet, json_response_packet);
    }
    if (str_command_name == "Channel1000ulCoreGripPlacePlateCommand")
    {
      int_return_val = 1;
      Channel1000ulCoreGripPlacePlate(ML_STAR, json_args_packet, json_response_packet);
    }
    return (int_return_val);
  }

  private function Channel1000ulTipEject( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable int_arr_size;
    private variable str_channel_sequences_with_recovery_details;
    private variable str_venus_handle_errors;
    private variable int_success_flag;
    private variable index;
    private variable str_channel_variable;
    private sequence seq_sequence;
    private variable arr_sequence_position[];
    private variable arr_sequence_labware[];
    private variable err_code_3;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("channel_variable"), str_channel_variable);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("channel_variable not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_labware"), arr_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_position"), arr_sequence_position);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_position not found in json_args_packet"));
    }
    int_arr_size=arr_sequence_labware.GetSize();
    {
      for(index = 0; index < int_arr_size;)
      {
        index = index + 1;
        SeqAdd(seq_sequence, arr_sequence_labware.ElementAt( index -1), arr_sequence_position.ElementAt( index -1));
      }
    }
    seq_sequence.SetCount(int_arr_size);
    seq_sequence.SetCurrentPosition(1);
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
    }
    else
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_channel_sequences_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  private function Channel1000ulAspirate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable int_arr_size;
    private variable str_channel_sequences_with_recovery_details;
    private variable str_venus_handle_errors;
    private variable int_success_flag;
    private variable index;
    private variable str_channel_variable;
    private sequence seq_sequence;
    private variable arr_sequence_position[];
    private variable arr_submerge_depth_mm[];
    private variable arr_pressure_lld_sensitivity[];
    private variable arr_sequence_labware[];
    private variable arr_liquid_following_during_aspirate_and_mix[];
    private variable arr_max_height_difference_mm[];
    private variable arr_capacitive_lld_sensitivity[];
    private variable arr_fix_height_from_bottom_mm[];
    private variable arr_mix_position_mm[];
    private variable arr_volume_ul[];
    private variable arr_cycles[];
    private variable arr_aspiration_position_above_touch_mm[];
    private variable arr_aspirate_mode[];
    private variable arr_retract_distance_for_transport_air_mm[];
    private variable arr_liquid_class[];
    private variable arr_touch_off[];
    private variable arr_mix_volume_ul[];
    private variable err_code_3;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("channel_variable"), str_channel_variable);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("channel_variable not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_labware"), arr_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_position"), arr_sequence_position);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_position not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("volume_ul"), arr_volume_ul);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("volume_ul not found in json_args_packet"));
    }
    PadArray(arr_volume_ul, 16, 0);
    CastArrayToFloat(arr_volume_ul);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("aspirate_mode"), arr_aspirate_mode);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("aspirate_mode not found in json_args_packet"));
    }
    PadArray(arr_aspirate_mode, 16, 0);
    CastArrayToInt(arr_aspirate_mode);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("liquid_class"), arr_liquid_class);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("liquid_class not found in json_args_packet"));
    }
    PadArray(arr_liquid_class, 16, Translate(""));
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("capacitive_lld_sensitivity"), arr_capacitive_lld_sensitivity);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("capacitive_lld_sensitivity not found in json_args_packet"));
    }
    PadArray(arr_capacitive_lld_sensitivity, 16, 0);
    CastArrayToInt(arr_capacitive_lld_sensitivity);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("pressure_lld_sensitivity"), arr_pressure_lld_sensitivity);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("pressure_lld_sensitivity not found in json_args_packet"));
    }
    PadArray(arr_pressure_lld_sensitivity, 16, 0);
    CastArrayToInt(arr_pressure_lld_sensitivity);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("fix_height_from_bottom_mm"), arr_fix_height_from_bottom_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("fix_height_from_bottom_mm not found in json_args_packet"));
    }
    PadArray(arr_fix_height_from_bottom_mm, 16, 0);
    CastArrayToFloat(arr_fix_height_from_bottom_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("touch_off"), arr_touch_off);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("touch_off not found in json_args_packet"));
    }
    PadArray(arr_touch_off, 16, 0);
    CastArrayToInt(arr_touch_off);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("submerge_depth_mm"), arr_submerge_depth_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("submerge_depth_mm not found in json_args_packet"));
    }
    PadArray(arr_submerge_depth_mm, 16, 0);
    CastArrayToFloat(arr_submerge_depth_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("max_height_difference_mm"), arr_max_height_difference_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("max_height_difference_mm not found in json_args_packet"));
    }
    PadArray(arr_max_height_difference_mm, 16, 0);
    CastArrayToFloat(arr_max_height_difference_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("retract_distance_for_transport_air_mm"), arr_retract_distance_for_transport_air_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("retract_distance_for_transport_air_mm not found in json_args_packet"));
    }
    PadArray(arr_retract_distance_for_transport_air_mm, 16, 0);
    CastArrayToFloat(arr_retract_distance_for_transport_air_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("aspiration_position_above_touch_mm"), arr_aspiration_position_above_touch_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("aspiration_position_above_touch_mm not found in json_args_packet"));
    }
    PadArray(arr_aspiration_position_above_touch_mm, 16, 0);
    CastArrayToFloat(arr_aspiration_position_above_touch_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("liquid_following_during_aspirate_and_mix"), arr_liquid_following_during_aspirate_and_mix);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("liquid_following_during_aspirate_and_mix not found in json_args_packet"));
    }
    PadArray(arr_liquid_following_during_aspirate_and_mix, 16, 0);
    CastArrayToInt(arr_liquid_following_during_aspirate_and_mix);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("cycles"), arr_cycles);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("cycles not found in json_args_packet"));
    }
    PadArray(arr_cycles, 16, 0);
    CastArrayToInt(arr_cycles);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("mix_position_mm"), arr_mix_position_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("mix_position_mm not found in json_args_packet"));
    }
    PadArray(arr_mix_position_mm, 16, 0);
    CastArrayToFloat(arr_mix_position_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("mix_volume_ul"), arr_mix_volume_ul);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("mix_volume_ul not found in json_args_packet"));
    }
    PadArray(arr_mix_volume_ul, 16, 0);
    CastArrayToFloat(arr_mix_volume_ul);
    int_arr_size=arr_sequence_labware.GetSize();
    {
      for(index = 0; index < int_arr_size;)
      {
        index = index + 1;
        SeqAdd(seq_sequence, arr_sequence_labware.ElementAt( index -1), arr_sequence_position.ElementAt( index -1));
      }
    }
    seq_sequence.SetCount(int_arr_size);
    seq_sequence.SetCurrentPosition(1);
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
    }
    else
    {
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_channel_sequences_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  private function Channel1000ulDispense( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable int_arr_size;
    private variable str_channel_sequences_with_recovery_details;
    private variable str_venus_handle_errors;
    private variable int_success_flag;
    private variable index;
    private variable str_channel_variable;
    private sequence seq_sequence;
    private variable arr_sequence_position[];
    private variable arr_dispense_mode[];
    private variable arr_dispense_position_above_touch_mm[];
    private variable arr_sequence_labware[];
    private variable arr_submerge_depth_mm[];
    private variable arr_liquid_following_during_dispense_and_mix[];
    private variable arr_capacitive_lld_sensitivity[];
    private variable arr_mix_position_mm[];
    private variable arr_fix_height_from_bottom_mm[];
    private variable arr_volume_ul[];
    private variable arr_cycles[];
    private variable arr_retract_distance_for_transport_air_mm[];
    private variable arr_liquid_class[];
    private variable arr_touch_off[];
    private variable arr_mix_volume_ul[];
    private variable int_z_move_after_step;
    private variable int_side_touch;
    private variable err_code_3;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("side_touch"), int_side_touch);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("side_touch not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("z_move_after_step"), int_z_move_after_step);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("z_move_after_step not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("channel_variable"), str_channel_variable);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("channel_variable not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_labware"), arr_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("sequence_position"), arr_sequence_position);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("sequence_position not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("volume_ul"), arr_volume_ul);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("volume_ul not found in json_args_packet"));
    }
    PadArray(arr_volume_ul, 16, 0);
    CastArrayToFloat(arr_volume_ul);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("dispense_mode"), arr_dispense_mode);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("dispense_mode not found in json_args_packet"));
    }
    PadArray(arr_dispense_mode, 16, 0);
    CastArrayToInt(arr_dispense_mode);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("fix_height_from_bottom_mm"), arr_fix_height_from_bottom_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("fix_height_from_bottom_mm not found in json_args_packet"));
    }
    PadArray(arr_fix_height_from_bottom_mm, 16, 0);
    CastArrayToFloat(arr_fix_height_from_bottom_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("capacitive_lld_sensitivity"), arr_capacitive_lld_sensitivity);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("capacitive_lld_sensitivity not found in json_args_packet"));
    }
    PadArray(arr_capacitive_lld_sensitivity, 16, 0);
    CastArrayToInt(arr_capacitive_lld_sensitivity);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("touch_off"), arr_touch_off);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("touch_off not found in json_args_packet"));
    }
    PadArray(arr_touch_off, 16, 0);
    CastArrayToInt(arr_touch_off);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("retract_distance_for_transport_air_mm"), arr_retract_distance_for_transport_air_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("retract_distance_for_transport_air_mm not found in json_args_packet"));
    }
    PadArray(arr_retract_distance_for_transport_air_mm, 16, 0);
    CastArrayToFloat(arr_retract_distance_for_transport_air_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("submerge_depth_mm"), arr_submerge_depth_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("submerge_depth_mm not found in json_args_packet"));
    }
    PadArray(arr_submerge_depth_mm, 16, 0);
    CastArrayToFloat(arr_submerge_depth_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("dispense_position_above_touch_mm"), arr_dispense_position_above_touch_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("dispense_position_above_touch_mm not found in json_args_packet"));
    }
    PadArray(arr_dispense_position_above_touch_mm, 16, 0);
    CastArrayToFloat(arr_dispense_position_above_touch_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("liquid_class"), arr_liquid_class);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("liquid_class not found in json_args_packet"));
    }
    PadArray(arr_liquid_class, 16, Translate(""));
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("liquid_following_during_dispense_and_mix"), arr_liquid_following_during_dispense_and_mix);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("liquid_following_during_dispense_and_mix not found in json_args_packet"));
    }
    PadArray(arr_liquid_following_during_dispense_and_mix, 16, 0);
    CastArrayToInt(arr_liquid_following_during_dispense_and_mix);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("cycles"), arr_cycles);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("cycles not found in json_args_packet"));
    }
    PadArray(arr_cycles, 16, 0);
    CastArrayToInt(arr_cycles);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("mix_position_mm"), arr_mix_position_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("mix_position_mm not found in json_args_packet"));
    }
    PadArray(arr_mix_position_mm, 16, 0);
    CastArrayToFloat(arr_mix_position_mm);
    int_success_flag = HSLJsonLib::GetArray(json_args_packet, Translate("mix_volume_ul"), arr_mix_volume_ul);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("mix_volume_ul not found in json_args_packet"));
    }
    PadArray(arr_mix_volume_ul, 16, 0);
    CastArrayToFloat(arr_mix_volume_ul);
    int_arr_size=arr_sequence_labware.GetSize();
    {
      for(index = 0; index < int_arr_size;)
      {
        index = index + 1;
        SeqAdd(seq_sequence, arr_sequence_labware.ElementAt( index -1), arr_sequence_position.ElementAt( index -1));
      }
    }
    seq_sequence.SetCount(int_arr_size);
    seq_sequence.SetCurrentPosition(1);
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
    }
    else
    {
      onerror goto errLabel_4 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	str_channel_sequences_with_recovery_details = arrRetValues[2];
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_channel_sequences_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  private function PadArray( variable & arr_array[], variable int_new_length, variable var_pad_value ) void {
    private variable int_array_size;
    private variable int_iterations;
    private variable index;
    int_array_size=arr_array.GetSize();
    int_iterations = (int_new_length - int_array_size);
    {
      for(index = 0; index < int_iterations;)
      {
        index = index + 1;
        arr_array.AddAsLast(var_pad_value);
      }
    }
  }

  private function CastArrayToInt( variable & arr_array[] ) void {
    private variable int_array_size;
    private variable index;
    private variable var_array_value;
    private variable str_type;
    int_array_size=arr_array.GetSize();
    {
      for(index = 0; index < int_array_size;)
      {
        index = index + 1;
        var_array_value=arr_array.GetAt(index-1);
        str_type = StrGetType(var_array_value);
        if (str_type == "i")
        {
          var_array_value = StrIStr(var_array_value);
        }
        if (str_type == "f")
        {
          var_array_value = StrFStr(var_array_value);
        }
        var_array_value = StrIVal2(var_array_value);
        arr_array.SetAt(index-1, var_array_value);
      }
    }
  }

  private function CastArrayToFloat( variable & arr_array[] ) void {
    private variable int_array_size;
    private variable index;
    private variable var_array_value;
    private variable str_type;
    int_array_size=arr_array.GetSize();
    {
      for(index = 0; index < int_array_size;)
      {
        index = index + 1;
        var_array_value=arr_array.GetAt(index-1);
        str_type = StrGetType(var_array_value);
        if (str_type == "i")
        {
          var_array_value = StrIStr(var_array_value);
        }
        if (str_type == "f")
        {
          var_array_value = StrFStr(var_array_value);
        }
        var_array_value = StrFVal2(var_array_value);
        arr_array.SetAt(index-1, var_array_value);
      }
    }
  }

  private function Channel1000ulCoreGripGetPlate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable flt_grip_speed_mm_per_s;
    private variable str_plate_sequence_labware;
    private variable str_channel_sequences_with_recovery_details;
    private variable str_venus_handle_errors;
    private variable int_success_flag;
    private variable int_check_if_plate_exists;
    private variable flt_grip_width_mm;
    private variable str_lid_sequence_labware;
    private variable flt_opening_width_before_access;
    private variable flt_z_speed_mm_per_s;
    private variable str_gripper_tool_sequence_labware;
    private variable flt_grip_height_mm;
    private variable str_get_plate_data_with_recovery_details;
    private variable int_transport_mode;
    private sequence seq_gripper_tool_sequence;
    private sequence seq_plate_sequence;
    private sequence seq_lid_sequence;
    private variable err_code_3;
    private variable err_code_4;
    private variable int_used_front_channel;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("transport_mode"), int_transport_mode);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("transport_mode not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("plate_sequence_labware"), str_plate_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("plate_sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("lid_sequence_labware"), str_lid_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("lid_sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("gripper_tool_sequence_labware"), str_gripper_tool_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("gripper_tool_sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("used_front_channel"), int_used_front_channel);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("used_front_channel not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("grip_height_mm"), flt_grip_height_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("grip_height_mm not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("grip_width_mm"), flt_grip_width_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("grip_width_mm not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("opening_width_before_access"), flt_opening_width_before_access);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("opening_width_before_access not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("grip_speed_mm_per_s"), flt_grip_speed_mm_per_s);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("grip_speed_mm_per_s not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("z_speed_mm_per_s"), flt_z_speed_mm_per_s);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("z_speed_mm_per_s not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("check_if_plate_exists"), int_check_if_plate_exists);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("check_if_plate_exists not found in json_args_packet"));
    }
    if (str_plate_sequence_labware != "None")
    {
      HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, str_plate_sequence_labware, 0, seq_plate_sequence);
    }
    if (str_lid_sequence_labware != "None")
    {
      HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, str_lid_sequence_labware, 0, seq_lid_sequence);
    }
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, str_gripper_tool_sequence_labware, 0, seq_gripper_tool_sequence);
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	str_get_plate_data_with_recovery_details = arrRetValues[2];
        	str_channel_sequences_with_recovery_details = arrRetValues[3];
      }
    }
    else
    {
      onerror goto errLabel_5 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        	str_get_plate_data_with_recovery_details = arrRetValues[2];
        	str_channel_sequences_with_recovery_details = arrRetValues[3];
      }
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_get_plate_data_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_get_plate_data_with_recovery_details);
        str_channel_sequences_with_recovery_details = ErrGetDataAt(4);
        err_code_4 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2&& err_code_4 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_get_plate_data_with_recovery_details"), str_get_plate_data_with_recovery_details);
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  private function Channel1000ulCoreGripPlacePlate( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable str_plate_sequence_labware;
    private variable str_channel_sequences_with_recovery_details;
    private variable str_venus_handle_errors;
    private variable int_success_flag;
    private variable flt_plate_press_on_distance_mm;
    private variable int_check_if_plate_exists;
    private variable int_x_acceleration_level;
    private variable str_lid_sequence_labware;
    private variable flt_z_speed_mm_per_s;
    private variable str_gripper_tool_sequence_labware;
    private variable int_eject_tool_when_finish;
    private variable int_transport_mode;
    private sequence seq_gripper_tool_sequence;
    private sequence seq_plate_sequence;
    private sequence seq_lid_sequence;
    private variable str_place_plate_data_with_recovery_details;
    private variable err_code_3;
    private variable err_code_4;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("transport_mode"), int_transport_mode);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("transport_mode not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("plate_sequence_labware"), str_plate_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("plate_sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("lid_sequence_labware"), str_lid_sequence_labware);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("lid_sequence_labware not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("eject_tool_when_finish"), int_eject_tool_when_finish);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("eject_tool_when_finish not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("x_acceleration_level"), int_x_acceleration_level);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("x_acceleration_level not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("z_speed_mm_per_s"), flt_z_speed_mm_per_s);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("z_speed_mm_per_s not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetFloatProperty(json_args_packet, Translate("plate_press_on_distance_mm"), flt_plate_press_on_distance_mm);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("plate_press_on_distance_mm not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("check_if_plate_exists"), int_check_if_plate_exists);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("check_if_plate_exists not found in json_args_packet"));
    }
    if (str_plate_sequence_labware != "None")
    {
      HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, str_plate_sequence_labware, 0, seq_plate_sequence);
    }
    if (str_lid_sequence_labware != "None")
    {
      HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, str_lid_sequence_labware, 0, seq_lid_sequence);
    }
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	str_place_plate_data_with_recovery_details = arrRetValues[2];
        	str_channel_sequences_with_recovery_details = arrRetValues[3];
      }
    }
    else
    {
      onerror goto errLabel_6 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        	str_place_plate_data_with_recovery_details = arrRetValues[2];
        	str_channel_sequences_with_recovery_details = arrRetValues[3];
      }
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_place_plate_data_with_recovery_details = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_place_plate_data_with_recovery_details);
        str_channel_sequences_with_recovery_details = ErrGetDataAt(4);
        err_code_4 = StepReturn::GetErrorCode(str_channel_sequences_with_recovery_details);
        if (err_code_3 != 2&& err_code_4 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_place_plate_data_with_recovery_details"), str_place_plate_data_with_recovery_details);
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_channel_sequences_with_recovery_details"), str_channel_sequences_with_recovery_details);
  }

  private function LockUnlockFrontCover( device & ML_STAR, object & json_args_packet, object & json_response_packet ) void {
    private variable str_venus_handle_errors;
    private variable int_front;
    private variable int_success_flag;
    private variable str_cover_lock_status_as_block_data;
    private variable str_cover_lock_status_flag;
    private variable err_code_3;
    int_success_flag = HSLJsonLib::GetStringProperty(json_args_packet, Translate("venus_handle_errors"), str_venus_handle_errors);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("venus_handle_errors not found in json_args_packet"));
    }
    int_success_flag = HSLJsonLib::GetIntegerProperty(json_args_packet, Translate("front"), int_front);
    if (int_success_flag != 0)
    {
      ErrRaise(-1, Translate("front not found in json_args_packet"));
    }
    if (str_venus_handle_errors == "True")
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        	str_cover_lock_status_as_block_data = arrRetValues[2];
        	str_cover_lock_status_flag = arrRetValues[3];
      }
    }
    else
    {
      onerror goto errLabel_7 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
        	str_cover_lock_status_as_block_data = arrRetValues[2];
        	str_cover_lock_status_flag = arrRetValues[3];
      }
      errLabel_7 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        str_cover_lock_status_as_block_data = ErrGetDataAt(3);
        err_code_3 = StepReturn::GetErrorCode(str_cover_lock_status_as_block_data);
        str_cover_lock_status_flag = ErrGetDataAt(4);
        if (err_code_3 != 2)
        {
          ErrClear();
        }
      }   /* end if from skip handler if no error */
    }
    HSLJsonLib::SetStringProperty(json_response_packet, Translate("raw_cover_lock_status_as_block_data"), str_cover_lock_status_as_block_data);
    HSLJsonLib::SetIntegerProperty(json_response_packet, Translate("raw_cover_lock_status_flag"), str_cover_lock_status_flag);
  }
} // library namespace
